PsychoPy2experiment version="1.82.01"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = MoralCognition
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine Likert_Scale
    TextComponent LikertScaleText
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text [set every repeat]:
        To what extent is this action morally acceptable?
        1 being completely acceptable to 7 being completely unacceptable.

        Click the number to rate acceptability, then click the number below to confirm your response.
    RatingScaleComponent rating
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
      stopVal [duration (s)] = 10
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  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
    TextComponent fixation
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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    TextComponent storytime
      text [set every repeat] = $intentstory
      stopVal [duration (s)] = 120.0
      startVal [time (s)] = 2.0
      letterHeight = 0.05
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    KeyboardComponent forceend_storytime
      stopVal [duration (s)] = 120.0
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 2.0
      store = nothing
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  Routine intentq
    TextComponent deonticjudgment
      text [set every repeat] = $djquestion
      stopVal [duration (s)] = 10.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent YESORNO
      text [set every repeat] = YES (Y)			NO (N)
      stopVal [duration (s)] = 10.0
      pos = [0, -.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent djresp
      stopVal [duration (s)] = 10.0
      forceEndRoutine = True
      allowedKeys = 'y','n'
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent Instruct
      stopVal [duration (s)] = 60.0
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        You will be presented with a series of narratives about random bystanders.

        For each narrative, once you are finished reading the story, press spacebar to bring up the response pages.

        You will first be asked to rate whether one of the bystander's possible actions is morally acceptable or not. Click "Y" for Yes or "N" for No.

        In addition, you will be asked to rate how morally acceptable the bystander's action is from 1 to 7: 1 being completely acceptable to 7 completely unacceptable. Type in the number, and then click on the box with your number in it.

        The next trial will start automatically after you click on the box.

        Press space once you finish reading these instructions.
    KeyboardComponent forceend_instruct
      stopVal [duration (s)] = 60.0
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = mc_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'intentstory': u'Ian receives a communication that a cargo ship has an insect with a highly contagious disease. The captain himself is immune to the disease, but anybody who comes into contact with the insect will die. No passengers are on the ship. The ship is headed for a remote island where the captain will deliver the cargo to the five islanders. The captain does not know that there is a disease-carrying insect in the cargo and has no radio on board to receive a warning. Ian takes off in a helicopter to intercept the ship, but from a distance he sees the ship about to dock. Ian can shoo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,
      {u'intentstory': u'Connor is at a new aquarium exhibit when he sees a visit slip on a wet flower, fall down, and break his neck. The visitor is still alive and can be safely evacuated by medics so long as he is not moved. He has fallen, however, on top of the oxygen supply line servicing five other visitors in an underwater observation pod. Without oxygen, the five visits will soon die. If Connor does nothing the one visitor will be safely evacuated, but the five visitors in the pod will die. If Connor pushes the one visit off the supply line, the one visitor will die, but the five visitors in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,
      {u'intentstory': u'Rick is a fireman trying to help five children out of a burning house. There is only one window from which the children can be safely evacuated, and it is jammed shut. Rick must immediately smash open this large, heavy window or else all five children will die. Outside the window, on the sill, is a man safely awaiting evacuation who Rick cannot help hitting with his fists if he breaks the window, causing the man to fall off the sill. Falling off the silly is certain to kill the man. If Rick breaks open the window, he will hit the man with his fist, the man will fall off, and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,
      {u'intentstory': u'Fred is working on the top floor of a construction project when he sees a gearbox at the end of a steel beam about to break. Suspended from the gearbox is an elevated platform with five workers on it, and if the gearbox breaks, the five workers will fall to their deaths. Fred can save the five if he rushes across the steel beam immediately to engage the backup mechanism on the gearbox. In between Fred and the gearbox, there is a worker standing on the beam. Fred knows that if he rushes across the narrow beam, he is certain to bump into the other worker, causing this worker t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
    Routine trial
    Routine intentq
    Routine Likert_Scale
  LoopTerminator trials
