PsychoPy2experiment version="1.83.04"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = wordList
  Save excel file = True
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine beforeTrial
    TextComponent text_2
      text = Press any key to start the next block of words
      durationEstim = 15
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine checkResp2
    CodeComponent accColor_2
      Each Frame:
        if int(key_resp_4.keys) == int(corrAns):
            respColor = "green"
        elif key_resp_4.keys != corrAns:
            respColor = "red"
  Routine checkResp3
    CodeComponent accColor_3
      Each Frame:
        if int(key_resp_5.keys) == int(corrAns):
            respColor = "green"
        elif key_resp_5.keys != corrAns:
            respColor = "red"
  Routine checkResp4
    CodeComponent accColor_4
      Each Frame:
        if int(key_resp_5.keys) == int(corrAns):
            respColor = "green"
        elif key_resp_5.keys != corrAns:
            respColor = "red"
  Routine thanks
    TextComponent goodbye
      text = Yay! You're done
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine resp1
    TextComponent instructions_3
      stopVal [duration (s)] = 1
      pos = [-.5, .5]
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Solve as many equations as you can.

        Note: Solve from left to right, not according to orders of operations.
    TextComponent eqnDisp_3
      color [set every repeat] = $respColor
      text [set every repeat] = $equationDisp
      stopVal [duration (s)] = 1
      pos = [-0.1, -0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter1_3
      color [set every repeat] = $color1
      text = 1.
      stopVal [duration (s)] = 1
      pos = [-0.4, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans1_3
      color [set every repeat] = $color1
      text [set every repeat] = $answer1
      stopVal [duration (s)] = 1
      pos = [-0.4, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter2_3
      color [set every repeat] = $color2
      text = 2.
      stopVal [duration (s)] = 1
      pos = [-0.2, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans2_3
      color [set every repeat] = $color2
      text [set every repeat] = $answ2
      stopVal [duration (s)] = 1
      pos = [-0.2, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter3_3
      color [set every repeat] = $color3
      text = 3.
      stopVal [duration (s)] = 1
      pos = [0, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans3_3
      color [set every repeat] = $color3
      text [set every repeat] = $answ3
      stopVal [duration (s)] = 1
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter4_3
      color [set every repeat] = $color4
      text = 4.
      stopVal [duration (s)] = 1
      pos = [0.2, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans4_3
      color [set every repeat] = $color4
      text [set every repeat] = $answ4
      stopVal [duration (s)] = 1
      pos = [0.2, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_6
      Begin Experiment:
        countTheTime = 0
      Each Frame:
        tempTheTime = typeIn1Clock.getTime() - countTheTime
        countTheTime = typeIn1Clock.getTime()


        if tempTheTime>0:
            tempTotal = totalTime + tempTheTime
        else:
            tempTotal = tempTotal

        totalTime = tempTotal


        if totalTime>= 9:
            pauseOne.finished = True
  Routine preThanksPause
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
  Routine introduction
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        Welcome to the experiment!

        In this experiment, you will be shown a set of words, twice. Don't write them down, but do pay attention as they go by! You'll be asked later if they showed up.

        In between each list, you'll have a set of math problems to solve. Do your best, but don't worry if you get one or two wrong.

        After the lists of words, you'll be shown a list of words. Indicate whether the word is one you've seen earlier in the study. (There will be instructions again for this at the time.)

        Enjoy the experiment!

        Press any key when ready to start.
    KeyboardComponent stop_intro
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr2
    TextComponent instrPart2
      durationEstim = 20
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Study session finished.

        Next is the test session. You will be presented with a list of words. If the word is one you saw in the study session, press 'z'. If you did not see the word in the study session, press 'm'.

        Press any key to get started.
    KeyboardComponent endInstr
      stopVal [duration (s)] = 20
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial2
    TextComponent word_2
      text [set every repeat] = $textTwo
      stopVal [duration (s)] = .75
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine testRoutine
    TextComponent testText
      text [set every repeat] = $word
      durationEstim = 10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      correctAns = $response
      storeCorrect = True
      durationEstim = 10
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'm','z'
      startVal [time (s)] = 0.0
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    TextComponent text_3
      stopVal [duration (s)] = 10
      pos = [-.3, .25]
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Press "z" if you saw on an earlier list.
        Press "m" if the word is new
  Routine btwnTrialResp
    StaticComponent ISI_4
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
  Routine trials_4
    TextComponent text_4
      text [set every repeat] = $textFour
      stopVal [duration (s)] = .75
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine setTimer
    CodeComponent code_3
  Routine typeIn1
    TextComponent instructions
      durationEstim = 15
      pos = [-.5, .5]
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Solve as many equations as you can.

        Note: Solve from left to right, not according to orders of operations.
    TextComponent eqnDisp
      color = blue
      text [set every repeat] = $equationDisp
      durationEstim = 15
      pos = [-0.1, -0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter1
      color = blue
      text = 1.
      durationEstim = 15
      pos = [-0.4, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans1
      color = blue
      text [set every repeat] = $answer1
      durationEstim = 15
      pos = [-0.4, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter2
      color = blue
      text = 2.
      durationEstim = 15
      pos = [-0.2, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans2
      color = blue
      text [set every repeat] = $answ2
      durationEstim = 15
      pos = [-0.2, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter3
      color = blue
      text = 3.
      durationEstim = 15
      pos = [0, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans3
      color = blue
      text [set every repeat] = $answ3
      durationEstim = 15
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter4
      color = blue
      text = 4.
      durationEstim = 15
      pos = [0.2, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans4
      color = blue
      text [set every repeat] = $answ4
      durationEstim = 15
      pos = [0.2, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','2','3','4'
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent code
      Begin Experiment:
        countTheTime = 0
      Each Frame:
        tempTheTime = typeIn1Clock.getTime() - countTheTime
        countTheTime = typeIn1Clock.getTime()


        if tempTheTime>0:
            tempTotal = totalTime + tempTheTime
        else:
            tempTotal = tempTotal

        totalTime = tempTotal


        if totalTime>= 9:
            pauseOne.finished = True
  Routine typeIn2
    TextComponent instructions_2
      durationEstim = 15
      pos = [-.5, .5]
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Solve as many equations as you can.

        Note: Solve from left to right, not according to orders of operations.
    TextComponent eqnDisp_2
      color = blue
      text [set every repeat] = $equationDisp
      durationEstim = 15
      pos = [-0.1, -0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter1_2
      color = blue
      text = 1.
      durationEstim = 15
      pos = [-0.4, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans1_2
      color = blue
      text [set every repeat] = $answer1
      durationEstim = 15
      pos = [-0.4, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter2_2
      color = blue
      text = 2.
      durationEstim = 15
      pos = [-0.2, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans2_2
      color = blue
      text [set every repeat] = $answ2
      durationEstim = 15
      pos = [-0.2, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter3_2
      color = blue
      text = 3.
      durationEstim = 15
      pos = [0, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans3_2
      color = blue
      text [set every repeat] = $answ3
      durationEstim = 15
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter4_2
      color = blue
      text = 4.
      durationEstim = 15
      pos = [0.2, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans4_2
      color = blue
      text [set every repeat] = $answ4
      durationEstim = 15
      pos = [0.2, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','2','3','4'
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Begin Experiment:
        countTheTime = 0
      Each Frame:
        tempTheTime = typeIn2Clock.getTime() - countTheTime
        countTheTime = typeIn2Clock.getTime()



        if tempTheTime>0:
            tempTotal = totalTime + tempTheTime
        else:
            tempTotal = tempTotal

        totalTime = tempTotal


        if totalTime>= 9:
            pause2.finished = True
  Routine typeIn3
    TextComponent instructions_4
      durationEstim = 15
      pos = [-.5, .5]
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Solve as many equations as you can.

        Note: Solve from left to right, not according to orders of operations.
    TextComponent eqnDisp_4
      color = blue
      text [set every repeat] = $equationDisp
      durationEstim = 15
      pos = [-0.1, -0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter1_4
      color = blue
      text = 1.
      durationEstim = 15
      pos = [-0.4, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans1_4
      color = blue
      text [set every repeat] = $answer1
      durationEstim = 15
      pos = [-0.4, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter2_4
      color = blue
      text = 2.
      durationEstim = 15
      pos = [-0.2, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans2_4
      color = blue
      text [set every repeat] = $answ2
      durationEstim = 15
      pos = [-0.2, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter3_4
      color = blue
      text = 3.
      durationEstim = 15
      pos = [0, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans3_4
      color = blue
      text [set every repeat] = $answ3
      durationEstim = 15
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter4_4
      color = blue
      text = 4.
      durationEstim = 15
      pos = [0.2, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans4_4
      color = blue
      text [set every repeat] = $answ4
      durationEstim = 15
      pos = [0.2, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','2','3','4'
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Begin Experiment:
        countTheTime = 0
      Each Frame:
        tempTheTime = typeIn3Clock.getTime() - countTheTime
        countTheTime = typeIn3Clock.getTime()



        if tempTheTime>0:
            tempTotal = totalTime + tempTheTime
        else:
            tempTotal = tempTotal

        totalTime = tempTotal


        if totalTime>= 9:
            pause3.finished = True
  Routine typeIn4
    TextComponent instructions_5
      durationEstim = 15
      pos = [-.5, .5]
      startVal [time (s)] = 0.0
      letterHeight = 0.075
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      text:
        Solve as many equations as you can.

        Note: Solve from left to right, not according to orders of operations.
    TextComponent eqnDisp_5
      color = blue
      text [set every repeat] = $equationDisp
      durationEstim = 15
      pos = [-0.1, -0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter1_5
      color = blue
      text = 1.
      durationEstim = 15
      pos = [-0.4, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans1_5
      color = blue
      text [set every repeat] = $answer1
      durationEstim = 15
      pos = [-0.4, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter2_5
      color = blue
      text = 2.
      durationEstim = 15
      pos = [-0.2, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans2_5
      color = blue
      text [set every repeat] = $answ2
      durationEstim = 15
      pos = [-0.2, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter3_5
      color = blue
      text = 3.
      durationEstim = 15
      pos = [0, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans3_5
      color = blue
      text [set every repeat] = $answ3
      durationEstim = 15
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent letter4_5
      color = blue
      text = 4.
      durationEstim = 15
      pos = [0.2, -0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent ans4_5
      color = blue
      text [set every repeat] = $answ4
      durationEstim = 15
      pos = [0.2, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','2','3','4'
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Begin Experiment:
        countTheTime = 0
      Each Frame:
        tempTheTime = typeIn4Clock.getTime() - countTheTime
        countTheTime = typeIn4Clock.getTime()



        if tempTheTime>0:
            tempTotal = totalTime + tempTheTime
        else:
            tempTotal = tempTotal

        totalTime = tempTotal


        if totalTime>= 9:
            pause4.finished = True
  Routine trials3
    TextComponent word_3
      text [set every repeat] = $textThree
      stopVal [duration (s)] = .75
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine setTotalTime
    CodeComponent code_4
      Begin Routine:
        totalTime = 0
        tempTotal = 0
  Routine preTrialPause
    StaticComponent ISI_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
  Routine checkResp
    CodeComponent accColor
      Each Frame:
        if int(key_resp_2.keys) == int(corrAns):
            respColor = "green"
        elif key_resp_2.keys != corrAns:
            respColor = "red"
  Routine trial
    TextComponent word
      text [set every repeat] = $textOne
      stopVal [duration (s)] = .75
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine testTExt
    CodeComponent code_5
      Begin Routine:
        print totalTime, "totalTime\n"
Flow
  Routine introduction
  Routine beforeTrial
  Routine preTrialPause
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialList1.xlsx
    isTrials = False
    loopType = random
    nReps = 2
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    conditions:
      [{u'textOne': u'mad'},
      {u'textOne': u'fear'},
      {u'textOne': u'hate'},
      {u'textOne': u'rage'},
      {u'textOne': u'temper'},
      {u'textOne': u'fury'},
      {u'textOne': u'ire'},
      {u'textOne': u'wrath'},
      {u'textOne': u'happy'},
      {u'textOne': u'fight'}]
    Routine trial
  LoopTerminator trials
  Routine btwnTrialResp
  Routine setTotalTime
  LoopInitiator pauseOne loopType="TrialHandler"
    conditionsFile = eqnTest.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'color1': u'yellow', u'answ4': 6, u'color3': u'green', u'color2': u'yellow', u'corrAns': 3, u'equationDisp': u'9 + 6 \xf7 3', u'answ3': 5, u'answ2': 3, u'answer1': 4, u'color4': u'yellow'},
      {u'color1': u'yellow', u'answ4': 2, u'color3': u'yellow', u'color2': u'yellow', u'corrAns': 4, u'equationDisp': u'26 - 12 \xf7 7', u'answ3': 5, u'answ2': 4, u'answer1': 1, u'color4': u'green'},
      {u'color1': u'green', u'answ4': 80, u'color3': u'yellow', u'color2': u'yellow', u'corrAns': 1, u'equationDisp': u'23 - 17 * 10', u'answ3': 70, u'answ2': 50, u'answer1': 60, u'color4': u'yellow'},
      {u'color1': u'yellow', u'answ4': 12, u'color3': u'yellow', u'color2': u'yellow', u'corrAns': 4, u'equationDisp': u'17 + 19 \xf7 3', u'answ3': 10, u'answ2': 13, u'answer1': 11, u'color4': u'green'},
      {u'color1': u'yellow', u'answ4': 56, u'color3': u'yellow', u'color2': u'green', u'corrAns': 2, u'equationDisp': u'16 - 8 * 8', u'answ3': 80, u'answ2': 64, u'answer1': 72, u'color4': u'yellow'},
      {u'color1': u'yellow', u'answ4': 70, u'color3': u'yellow', u'color2': u'green', u'corrAns': 2, u'equationDisp': u'4 + 5 * 7', u'answ3': 54, u'answ2': 63, u'answer1': 49, u'color4': u'yellow'},
      {u'color1': u'green', u'answ4': 15, u'color3': u'yellow', u'color2': u'yellow', u'corrAns': 1, u'equationDisp': u'8 + 14 \xf7 2', u'answ3': 13, u'answ2': 12, u'answer1': 11, u'color4': u'yellow'}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
    Routine typeIn1
    Routine checkResp
    Routine resp1
  LoopTerminator pauseOne
  Routine btwnTrialResp
  Routine beforeTrial
  Routine btwnTrialResp
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = trialList2.xlsx
    isTrials = False
    loopType = random
    nReps = 2
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    conditions:
      [{u'textTwo': u'butter'},
      {u'textTwo': u'food'},
      {u'textTwo': u'eat'},
      {u'textTwo': u'sandwich'},
      {u'textTwo': u'rye'},
      {u'textTwo': u'jam'},
      {u'textTwo': u'milk'},
      {u'textTwo': u'flour'},
      {u'textTwo': u'jelly'},
      {u'textTwo': u'dough'}]
    Routine trial2
  LoopTerminator trials_2
  Routine btwnTrialResp
  Routine setTotalTime
  LoopInitiator pause2 loopType="TrialHandler"
    conditionsFile = eqnTest.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{u'equationDisp': u'9 + 6 \xf7 3', u'answer1': 4, u'answ4': 6, u'corrAns': 3, u'answ2': 3, u'answ3': 5},
      {u'equationDisp': u'26 - 12 \xf7 7', u'answer1': 1, u'answ4': 2, u'corrAns': 4, u'answ2': 4, u'answ3': 5},
      {u'equationDisp': u'23 - 17 * 10', u'answer1': 60, u'answ4': 80, u'corrAns': 1, u'answ2': 50, u'answ3': 70},
      {u'equationDisp': u'17 + 19 \xf7 3', u'answer1': 11, u'answ4': 12, u'corrAns': 4, u'answ2': 13, u'answ3': 10},
      {u'equationDisp': u'16 - 8 * 8', u'answer1': 72, u'answ4': 56, u'corrAns': 2, u'answ2': 64, u'answ3': 80},
      {u'equationDisp': u'4 + 5 * 7', u'answer1': 49, u'answ4': 70, u'corrAns': 2, u'answ2': 63, u'answ3': 54},
      {u'equationDisp': u'8 + 14 \xf7 2', u'answer1': 11, u'answ4': 15, u'corrAns': 1, u'answ2': 12, u'answ3': 13},
      {u'equationDisp': u'14 + 18 \xf7 4', u'answer1': 5, u'answ4': 7, u'corrAns': 2, u'answ2': 8, u'answ3': 6},
      {u'equationDisp': u'22 - 17 * 4', u'answer1': 20, u'answ4': 28, u'corrAns': 1, u'answ2': 24, u'answ3': 16},
      {u'equationDisp': u'24 - 3 \xf7 7', u'answer1': 7, u'answ4': 4, u'corrAns': 2, u'answ2': 3, u'answ3': 5},
      {u'equationDisp': u'27 + 15 - 13', u'answer1': 30, u'answ4': 26, u'corrAns': 2, u'answ2': 29, u'answ3': 27},
      {u'equationDisp': u'3 + 4 * 8', u'answer1': 64, u'answ4': 80, u'corrAns': 3, u'answ2': 72, u'answ3': 56},
      {u'equationDisp': u'18 - 14 * 12', u'answer1': 36, u'answ4': 48, u'corrAns': 4, u'answ2': 60, u'answ3': 24},
      {u'equationDisp': u'25 - 11 \xf7 7', u'answer1': 2, u'answ4': 1, u'corrAns': 1, u'answ2': 3, u'answ3': 4}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
    Routine typeIn2
    Routine checkResp2
    Routine resp1
  LoopTerminator pause2
  Routine btwnTrialResp
  Routine beforeTrial
  Routine btwnTrialResp
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = trialList3.xlsx
    isTrials = False
    loopType = random
    nReps = 2
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    conditions:
      [{u'textThree': u'bed'},
      {u'textThree': u'rest'},
      {u'textThree': u'awake'},
      {u'textThree': u'tired'},
      {u'textThree': u'dream'},
      {u'textThree': u'wake'},
      {u'textThree': u'snooze'},
      {u'textThree': u'blanket'},
      {u'textThree': u'doze'},
      {u'textThree': u'slumber'}]
    Routine trials3
  LoopTerminator trials_3
  Routine btwnTrialResp
  Routine setTotalTime
  LoopInitiator pause3 loopType="TrialHandler"
    conditionsFile = eqnTest.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{u'color1': u'yellow', u'answ4': 6, u'color3': u'green', u'color2': u'yellow', u'corrAns': 3, u'equationDisp': u'9 + 6 \xf7 3', u'answ3': 5, u'answ2': 3, u'answer1': 4, u'color4': u'yellow'},
      {u'color1': u'yellow', u'answ4': 2, u'color3': u'yellow', u'color2': u'yellow', u'corrAns': 4, u'equationDisp': u'26 - 12 \xf7 7', u'answ3': 5, u'answ2': 4, u'answer1': 1, u'color4': u'green'},
      {u'color1': u'green', u'answ4': 80, u'color3': u'yellow', u'color2': u'yellow', u'corrAns': 1, u'equationDisp': u'23 - 17 * 10', u'answ3': 70, u'answ2': 50, u'answer1': 60, u'color4': u'yellow'},
      {u'color1': u'yellow', u'answ4': 12, u'color3': u'yellow', u'color2': u'yellow', u'corrAns': 4, u'equationDisp': u'17 + 19 \xf7 3', u'answ3': 10, u'answ2': 13, u'answer1': 11, u'color4': u'green'},
      {u'color1': u'yellow', u'answ4': 56, u'color3': u'yellow', u'color2': u'green', u'corrAns': 2, u'equationDisp': u'16 - 8 * 8', u'answ3': 80, u'answ2': 64, u'answer1': 72, u'color4': u'yellow'},
      {u'color1': u'yellow', u'answ4': 70, u'color3': u'yellow', u'color2': u'green', u'corrAns': 2, u'equationDisp': u'4 + 5 * 7', u'answ3': 54, u'answ2': 63, u'answer1': 49, u'color4': u'yellow'},
      {u'color1': u'green', u'answ4': 15, u'color3': u'yellow', u'color2': u'yellow', u'corrAns': 1, u'equationDisp': u'8 + 14 \xf7 2', u'answ3': 13, u'answ2': 12, u'answer1': 11, u'color4': u'yellow'}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
    Routine typeIn3
    Routine checkResp3
    Routine resp1
  LoopTerminator pause3
  Routine btwnTrialResp
  Routine beforeTrial
  Routine btwnTrialResp
  LoopInitiator trials4 loopType="TrialHandler"
    conditionsFile = trialList4.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [{u'textFour': u'hot'},
      {u'textFour': u'snow'},
      {u'textFour': u'warm'},
      {u'textFour': u'winter'},
      {u'textFour': u'ice'},
      {u'textFour': u'wet'},
      {u'textFour': u'frigid'},
      {u'textFour': u'chilly'},
      {u'textFour': u'heat'},
      {u'textFour': u'weather'}]
    Routine trials_4
  LoopTerminator trials4
  Routine btwnTrialResp
  Routine setTotalTime
  LoopInitiator pause4 loopType="TrialHandler"
    conditionsFile = eqnTest.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine typeIn4
    Routine checkResp4
    Routine resp1
  LoopTerminator pause4
  Routine btwnTrialResp
  Routine instr2
  LoopInitiator testLoop loopType="TrialHandler"
    conditionsFile = testingList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'word': u'temper', u'response': u'z'},
      {u'word': u'fury', u'response': u'z'},
      {u'word': u'ire', u'response': u'z'},
      {u'word': u'wrath', u'response': u'z'},
      {u'word': u'happy', u'response': u'z'},
      {u'word': u'fight', u'response': u'z'},
      {u'word': u'rye', u'response': u'z'},
      {u'word': u'jam', u'response': u'z'},
      {u'word': u'milk', u'response': u'z'},
      {u'word': u'flour', u'response': u'z'},
      {u'word': u'jelly', u'response': u'z'},
      {u'word': u'dough', u'response': u'z'},
      {u'word': u'mouse', u'response': u'z'},
      {u'word': u'male', u'response': u'z'},
      {u'word': u'father', u'response': u'z'},
      {u'word': u'strong', u'response': u'z'},
      {u'word': u'friend', u'response': u'z'},
      {u'word': u'beard', u'response': u'z'},
      {u'word': u'anger', u'response': u'm'},
      {u'word': u'hatred', u'response': u'm'},
      {u'word': u'mean', u'response': u'm'},
      {u'word': u'calm', u'response': u'm'},
      {u'word': u'emotion', u'response': u'm'},
      {u'word': u'enrage', u'response': u'm'},
      {u'word': u'bread', u'response': u'm'},
      {u'word': u'crust', u'response': u'm'},
      {u'word': u'slice', u'response': u'm'},
      {u'word': u'wine', u'response': u'm'},
      {u'word': u'loaf', u'response': u'm'},
      {u'word': u'toast', u'response': u'm'},
      {u'word': u'man', u'response': u'm'},
      {u'word': u'person', u'response': u'm'},
      {u'word': u'handsome', u'response': u'm'},
      {u'word': u'muscle', u'response': u'm'},
      {u'word': u'suit', u'response': u'm'},
      {u'word': u'old', u'response': u'm'}]
    Routine testRoutine
  LoopTerminator testLoop
  Routine preTrialPause
  Routine thanks
